PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = illusioonid
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Routines
  Routine static
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if key_resp_2.keys == 'right':
            trials.finished=True
    GratingComponent staatiline
      opacity = 0.5
      ori = 90
      phase = 0
      sf = 0.5
      size = (15, 10)
      startVal [time (s)] = 0.0
      tex = sin
      units = deg
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    PolygonComponent fix_circle_2
      fillColor = $[1,0,0]
      lineWidth = 0
      nVertices = 99
      shape = regular polygon...
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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  Routine MAE
    GratingComponent grating
      opacity = 0.5
      ori = 90
      phase [set every frame] = $t*phaseMult
      sf = 0.5
      size = (15, 10)
      startVal [time (s)] = 0.0
      tex = sin
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent fix_circle
      fillColor = $[1,0,0]
      lineWidth = 0
      nVertices = 99
      shape = regular polygon...
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        phaseMult = 5
      Each Frame:
        if key_resp.keys == 'space':
            phaseMult = 0
        elif key_resp.keys == 'left':
            phaseMult = 5
        elif key_resp.keys == 'right':
            continueRoutine = False
    TextComponent text_mae
      letterHeight = 1
      pos = (0, 10)
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 20
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      text:
        Edasi liikumiseks vajuta paremt nooleklahvi
        Muutmiseks vajuta tühikut või vasakut nooleklahvi
  Routine Ponzo
    KeyboardComponent key_resp_ponzo
      allowedKeys = 'right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      pos = (0, -0.8)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (-25,25)
      units = norm
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    CodeComponent getSliderValue
      Code Type = Py
      Begin Experiment:
        slaiderValue = 0
        linew = 3
        lineSizeH = 3
        lineSizeV = 15
      Each Frame:
        if not slider.getHistory():
            slaiderValue = slaiderValue
        else:
            slaiderValue = slider.getHistory()
            slaiderValue = slaiderValue[-1][0]

        if key_resp_ponzo.keys == 'right':
            continueRoutine = False
    PolygonComponent horiz2
      fillColor = $[-0.3,-0.3,-0.3]
      lineColor = $[-0.3,-0.3,-0.3]
      lineWidth = 20
      pos = (0,-3)
      shape = line
      size = $(lineSizeH, lineSizeH)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent horiz1
      fillColor = $[-0.3,-0.3,-0.3]
      lineColor = $[-0.3,-0.3,-0.3]
      lineWidth = 20
      pos = (0,3)
      shape = line
      size = $(lineSizeH, lineSizeH)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent vertikaal1
      fillColor = $[1,1,1]
      lineWidth = 6
      ori [set every frame] = 90+slaiderValue
      pos = (-3, 0)
      shape = line
      size = $(lineSizeV, 0)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent vertikaal2
      fillColor = $[1,1,1]
      lineWidth = 6
      ori [set every frame] = 90-slaiderValue
      pos = (3, 0)
      shape = line
      size = $(lineSizeV, 0)
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent text_ponzo
      letterHeight = 1
      pos = (0, 10)
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 20
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      text:
        Edasi liikumiseks vajuta paremt nooleklahvi
        Muutmiseks kõlpsa kursoriga skaalal
  Routine Hermann
    KeyboardComponent key_resp_herm
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_Hermann
      Code Type = Py
      Begin Routine:
        polygon = visual.Rect(
            win=win, name='polygon',
            width=(2, 2)[0], height=(2, 2)[1],
            ori=0, pos=(0, 0), units = 'deg',
            lineWidth=1, lineColor=None, lineColorSpace='rgb',
            fillColor=[-1,-1,-1], fillColorSpace='rgb',
            opacity=1, depth=-2.0, interpolate=True)

        bpositions = [(-5, 2.5), (-2.5, 2.5), (0, 2.5),(2.5, 2.5),(5, 2.5),\
        (-5.0, 0.0),(-2.5, 0.0),(0, 0.0),(2.5, 0.0),(5, 0.0),\
        (-5.0, -2.5),(-2.5, -2.5),(0, -2.5),(2.5, -2.5), (5, -2.5),\
        (-5.0, -5),(-2.5, -5),(0, -5),(2.5, -5), (5, -5)]

        juku = visual.ElementArrayStim(win, units='deg', fieldPos=(0,0),
        fieldSize=(10,10), fieldShape='square', nElements=20, sizes=2.0,
        xys=bpositions, rgbs=None, colors=(-1.0, -1.0, -1.0), colorSpace='rgb',
        opacities=1.0, depths=0, fieldDepth=0, oris=0, sfs=0, contrs=1,
        phases=0, elementTex=None, elementMask=None, texRes=48,
        interpolate=True, name=None, autoLog=None, maskParams=None)

        sound_1 = sound.Sound('A', secs=1.0, stereo=True, hamming=True, name='sound_1')
        sound_1.setVolume(1)

        soundPlayed = False
      Each Frame:
        #polygon.setAutoDraw(True)
        juku.draw()
        if key_resp_herm.keys == 'left':# t > 3:
            proov2 = bpositions[0:10]
            shuffle(proov2)
            bpositions[0:10] = proov2
            bpositions[0] += t/50
            proov = bpositions[10:20]
            shuffle(proov)
            bpositions[10:20] = proov
            bpositions[10] -= t/50
            juku.xys = bpositions
            if soundPlayed == False:
                sound_1.play()
                soundPlayed = True
        elif key_resp_herm.keys == 'right':
            continueRoutine = False
    TextComponent text_hermann
      letterHeight = 1
      pos = (0, 10)
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 20
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      text:
        Edasi liikumiseks vajuta paremt nooleklahvi
        Muutmiseks vajuta tühikut
  Routine mc
    KeyboardComponent key_resp_mc
      allowedKeys = 'left','right','up'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        dot_size = 0.25
        orientations = [90,90,0,0]
        defaultCols = ([1, 0, 0],[1, 0, 0],[0, 1, 0],[0, 1, 0])

        gabors = visual.ElementArrayStim(win, units='deg',
        fieldPos=(0.0, 0.0), fieldSize=(5, 5), fieldShape='square',
        nElements=4, sizes=5, xys=[(-2.5,-2.5),(2.5,2.5),(-2.5,2.5),(2.5,-2.5)],
        colors=defaultCols , colorSpace='rgb', opacities=1, oris=orientations,
        sfs=2, contrs=[1, 1,1,1], phases=0, elementTex='sqr',
        elementMask=None, texRes=128, interpolate=True,
        name=None, autoLog=None, maskParams=None)
      Begin Routine:
        #gabors.oris = [90,90,0,0]
        #gabors.xys=[(-2.5,-2.5),(2.5,2.5),(-2.5,2.5),(2.5,-2.5)]
        #gabors.sizes =5
      Each Frame:
        gabors.draw()


        if key_resp_mc.keys == 'left':
            gabors.oris = [0,0,90,90]
            gabors.colors = ([1.0, 1.0, 1.0])
        elif key_resp_mc.keys == 'up':
            gabors.oris = [90,90,0,0]
            gabors.colors = defaultCols
        elif key_resp_mc.keys == 'right':
            continueRoutine = False
    TextComponent text_mc
      letterHeight = 1
      pos = (0, 10)
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 20
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      text:
        Edasi liikumiseks vajuta paremt nooleklahvi
        Muutmiseks vajuta vasakut või ülemist nooleklahvi
Flow
  Routine mc
  Routine MAE
  Routine Ponzo
  Routine Hermann
