PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'age': '', 'gender': 'm/f'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920/2, 1200/2]
  expName = stroop_feedback
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Routines
  Routine trial
    TextComponent stroopText
      color [set every repeat] = $rgb
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'left','right','down'
      correctAns = $respCorr
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine intro
    TextComponent introTxt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Tere tulemast Stroopi katsesse!

        Jätkamiseks vajuta palun tühikuklahvi...
    KeyboardComponent introKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent tnxTxt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Tänan, et leidsid aega katses osalemiseks!
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  Routine feedback
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if (key_resp.corr == 1):
            fbTxt = 'Õige, väga hea!'
        else:
            fbTxt = 'Vale, proovi uuesti.'
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fbTxt
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('word', 'punane'), ('colour', 'punane'), ('rgb', 'red'), ('congruent', 1), ('respCorr', 'left')]),
      OrderedDict([('word', 'punane'), ('colour', 'punane'), ('rgb', 'red'), ('congruent', 1), ('respCorr', 'left')]),
      OrderedDict([('word', 'punane'), ('colour', 'roheline'), ('rgb', 'green'), ('congruent', 0), ('respCorr', 'down')]),
      OrderedDict([('word', 'punane'), ('colour', 'sinine'), ('rgb', 'blue'), ('congruent', 0), ('respCorr', 'right')]),
      OrderedDict([('word', 'sinine'), ('colour', 'sinine'), ('rgb', 'blue'), ('congruent', 1), ('respCorr', 'right')]),
      OrderedDict([('word', 'sinine'), ('colour', 'sinine'), ('rgb', 'blue'), ('congruent', 1), ('respCorr', 'right')]),
      OrderedDict([('word', 'sinine'), ('colour', 'punane'), ('rgb', 'red'), ('congruent', 0), ('respCorr', 'left')]),
      OrderedDict([('word', 'sinine'), ('colour', 'roheline'), ('rgb', 'green'), ('congruent', 0), ('respCorr', 'down')]),
      OrderedDict([('word', 'roheline'), ('colour', 'roheline'), ('rgb', 'green'), ('congruent', 1), ('respCorr', 'down')]),
      OrderedDict([('word', 'roheline'), ('colour', 'roheline'), ('rgb', 'green'), ('congruent', 1), ('respCorr', 'down')]),
      OrderedDict([('word', 'roheline'), ('colour', 'punane'), ('rgb', 'red'), ('congruent', 0), ('respCorr', 'left')]),
      OrderedDict([('word', 'roheline'), ('colour', 'sinine'), ('rgb', 'blue'), ('congruent', 0), ('respCorr', 'righr')])]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thanks
